OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)

BrainVision Format file reader => #0
  Filename (header) = ${Player_ScenarioDirectory}/signals/CHANGEME.vhdr
  Epoch size (in sec) = 0.0625
  Convert stimuli to OpenViBE labels = true
#0.EEG stream -> Identity => #1
-> Temporal Filter (INSERM contrib) => #2
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 7.75
  High cut frequency (Hz) = 8.25
  Pass band ripple (dB) = 0.5
#1 -> Temporal Filter (INSERM contrib) => #3
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 8.75
  High cut frequency (Hz) = 9.25
  Pass band ripple (dB) = 0.5
#1 -> Temporal Filter (INSERM contrib) => #4
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 11.75
  High cut frequency (Hz) = 12.25
  Pass band ripple (dB) = 0.5
#0.Stimulations -> Identity => #5
Input signal=#2, Input stimulations=#5 -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 1
  Stimulation 1 = OVTK_StimulationId_Label_00
-> Time based epoching
  Epoch duration (in sec) = .5
  Epoch intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #11
Input signal=#2, Input stimulations=#5 -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 1
  Stimulation 1 = OVTK_StimulationId_Label_01
-> Time based epoching
  Epoch duration (in sec) = .5
  Epoch intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #17
Stimulations=#5, Features for class 1=#11, Features for class 2=#17 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Path_UserData}/my-classifier_f1.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_00
  Class 2 label = OVTK_StimulationId_Label_01
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
Input signal=#3, Input stimulations=#5 -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 1
  Stimulation 1 = OVTK_StimulationId_Label_00
-> Time based epoching
  Epoch duration (in sec) = .5
  Epoch intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #24
Input signal=#3, Input stimulations=#5 -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 1
  Stimulation 1 = OVTK_StimulationId_Label_01
-> Time based epoching
  Epoch duration (in sec) = .5
  Epoch intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #30
Stimulations=#5, Features for class 1=#24, Features for class 2=#30 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Path_UserData}/my-classifier_f2.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_00
  Class 2 label = OVTK_StimulationId_Label_01
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
Input signal=#4, Input stimulations=#5 -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 1
  Stimulation 1 = OVTK_StimulationId_Label_00
-> Time based epoching
  Epoch duration (in sec) = .5
  Epoch intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #38
Input signal=#4, Input stimulations=#5 -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 1
  Stimulation 1 = OVTK_StimulationId_Label_01
-> Time based epoching
  Epoch duration (in sec) = .5
  Epoch intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #44
Stimulations=#5, Features for class 1=#38, Features for class 2=#44 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Path_UserData}/my-classifier_f3.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_00
  Class 2 label = OVTK_StimulationId_Label_01
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
